PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = SAM
  Units = use prefs
  Screen = 1
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Routines
  Routine SAM_Arousal
    RatingScaleComponent rating
      pos = 0, -0.2
      high = 9
      startVal [time (s)] = 0.0
      size = 2.4
      showAccept = False
      forceEndRoutine = True
      low = 1
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    ImageComponent image_2
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      image = C:\Users\Sam\Pictures\SAM arousal.png
      size = [1.7, 0.5]
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  Routine SAM_Valence
    RatingScaleComponent rating_2
      pos = 0, -0.2
      high = 9
      startVal [time (s)] = 0.0
      size = 2.4
      showAccept = False
      forceEndRoutine = True
      low = 1
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    ImageComponent image_3
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      image = C:\Users\Sam\Pictures\SAM valence.png
      size = [1.7, 0.5]
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  Routine Agency_Q2
    RatingScaleComponent Agency2
      labels = Strongly Disagree, Unsure, Strongly Agree
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_4
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        To what extent do you agree with the statement:

        I felt as if I was the sole cause of the final LED flash
  Routine Please_Continue
    TextComponent text_2
      text = Thank you, please begin pressing the buttons again
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Agency_Q1
    RatingScaleComponent Agency1
      labels = Strongly Disagree, Unsure, Strongly Agree
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_3
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        To what extent do you agree with the statement:

        The computer algorithm predicted my choices as if it knows my thoughts in advance
  Routine Agency_Q3
    RatingScaleComponent Agency3
      labels = Strongly Disagree, Unsure, Strongly Agree
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_5
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        To what extent do you agree with the statement:

        It seemed as if the computer algorithm could sense the will of my final button presses
  Routine Agency_Q4
    RatingScaleComponent Agency4
      labels = Strongly Disagree, Unsure, Strongly Agree
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_6
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        To what extent do you agree with the statement:

        I felt as if the final LED flashes were by chance corresponding to my button presses, rather than being predicted by the computer algorithm
  Routine SAM_Control
    RatingScaleComponent Control
      pos = 0, -0.2
      high = 9
      startVal [time (s)] = 0.0
      size = 2.4
      showAccept = False
      forceEndRoutine = True
      low = 1
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    ImageComponent image
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      image = C:\Users\Sam\Pictures\SAM control.png
      size = [1.7, 0.5]
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  Routine Accuracy
    RatingScaleComponent rating_3
      pos = 0, -0.2
      high = 10
      startVal [time (s)] = 0.0
      size = 2.4
      showAccept = False
      forceEndRoutine = True
      low = 0
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    TextComponent text
      text = How many correct guesses did you think the computer made?
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 9
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    Routine Agency_Q1
    Routine Agency_Q2
    Routine Agency_Q3
    Routine Agency_Q4
    Routine SAM_Control
    Routine SAM_Arousal
    Routine SAM_Valence
    Routine Accuracy
    Routine Please_Continue
  LoopTerminator trials
